PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = nh_VisCompRating
  keyboardBackend = ioHub
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Routines
  Routine Welcome
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Welcome to the Visual Complexity Rating Task
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  Routine Instruction
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You will look at the following objects and rate it 1-5 on how visually complex it is. 1 being not visually complex, 3 being moderately visually complex, and 5 being extremly visually complex.

        Press SPACEBAR to begin!
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine VisComp_Feedback
    ImageComponent imageA
      image [set every repeat] = $landmark_imagesA
      pos = (-.25, .2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent imageB
      image [set every repeat] = $landmark_imagesB
      pos = (0, .2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent imageC
      image [set every repeat] = $landmark_imagesC
      pos = (.25, .2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = On a scale of 1-5, how visually complex is the object?
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    KeyboardComponent key_resp_2
      allowedKeys = '1','2','3','4','5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text = Thank you for participating in the Visual Complexity Task
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Flow
  Routine Welcome
  Routine Instruction
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = data/landmark_stims.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'landmark_imagesA': 'images/Landmark1.png', 'landmark_imagesB': 'images/Landmark5.png', 'landmark_imagesC': 'images/Landmark9.png'},
      {'landmark_imagesA': 'images/Landmark2.png', 'landmark_imagesB': 'images/Landmark6.png', 'landmark_imagesC': 'images/Landmark10.png'},
      {'landmark_imagesA': 'images/Landmark3.png', 'landmark_imagesB': 'images/Landmark7.png', 'landmark_imagesC': 'images/Landmark11.png'},
      {'landmark_imagesA': 'images/Landmark4.png', 'landmark_imagesB': 'images/Landmark8.png', 'landmark_imagesC': 'images/Landmark12.png'}]
    Routine VisComp_Feedback
  LoopTerminator trials
  Routine end
